# 1 "C:/Bruker/TS32pl7/exp/stan/nmr/lists/pp/user/phip_ig"
;phip
;avance-version (12/01/11)
;1D sequence
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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;ATTLvalves.incl
;   for AV III
;
;avance-version (13/06/17)
;
;$CLASS=HighRes Incl
;$COMMENT=

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;$Id: TTLvalves.incl,v 1.9.8.3 25.12.2015 Kiryutin Alexey 09:44:49 ber Exp $
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
; use commands for operating valves
; setnmr3|16, setnmr3^16, setnmr3|17, setnmr3^17, setnmr3|18, setnmr3^18, 
; setnmr3|19, setnmr3^19, setnmr3|15, setnmr3^15, setnmr3|10, setnmr3^10, setnmr3|11, setnmr3^11
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"acqt0=-p1*2/3.1416"


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define delay MCWRK
define delay MCREST
"MCREST = 30m - 30m"
"MCWRK = 0.333333*30m"

    dccorr
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1 ze
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  30m pl12:f2
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2 MCWRK  * 2 do:f2
LBLF0, MCWRK 
  MCREST
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10u setnmr3^0
  d1 
10u setnmr3|0  
  100m setnmr3|16 setnmr3|19 setnmr3|11 setnmr3^10 ; (start pH2 bubbling)
d2 setnmr3|17
	100m setnmr3^17 
	100m setnmr3|10 ; stop bubbling
  d3
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  p1 ph1
  go=2 ph31 cpd2:f2
	50m setnmr3^10 do:f2 
	100m setnmr3^16 setnmr3^11 setnmr3^19  
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  MCWRK wr #0
  MCWRK zd
  lo to LBLF0 times td0

  MCWRK
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	10u setnmr3^0

exit

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ph1=0
ph31=0


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  high power pulse
;d1 : relaxation delay; 1-5 * T1
;d2 : bubbling time pH2
;d3 : waiting after bubling 
;ns: 1 * n, total number of scans: NS * TD0
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;pl12: f2 channel - power level for CPD/BB decoupling
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


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;$Id: zg,v 1.10.8.1 2012/01/31 17:56:41 ber Exp $
