# 1 "C:/Bruker/TS32pl7/exp/stan/nmr/lists/pp/zgig"
;zgig
;avance-version (12/01/11)
;1D sequence with inverse gated decoupling
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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"d11=30m"


"acqt0=-p1*2/3.1416"
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define delay MCWRK
define delay MCREST
"MCREST = 30m - 30m"
"MCWRK = 0.333333*30m"

    dccorr
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1 ze
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  d11 pl12:f2
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2 MCWRK  * 2 do:f2
LBLF0, MCWRK 
  MCREST
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  d1
  p1 ph1
  go=2 ph31 cpd2:f2
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  MCWRK do:f2 wr #0
  MCWRK zd
  lo to LBLF0 times td0

  MCWRK
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exit


ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1
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;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;ns: 1 * n, total number of scans: NS * TD0
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


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;$Id: zgig,v 1.10.8.1 2012/01/31 17:56:42 ber Exp $
